begintemplate Amandola_MN3
objref this
public init, topol, subsets, geom, biophys, geom_nseg, basic_shape


public soma, dend, ah, iseg
public all, somatic, basal, AHIS


proc init() {
	parameters()
	topol()
	subsets()
	biophys()
	geom()
	print "full Cell Created"
}



create soma, dend[146]
create ah, iseg
// create axon

proc topol() { local i
//   connect axon(0), soma(0.5)
  connect ah(0), soma(0.5)
  connect iseg(0),ah(1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect dend[11](0), dend[1](1)
  connect dend[12](0), dend(1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  connect dend[20](0), soma(0.5)
  for i = 21, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  connect dend[30](0), dend[22](1)
  connect dend[31](0), dend[21](1)
  connect dend[32](0), dend[20](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), soma(0.5)
  for i = 38, 40 connect dend[i](0), dend[i-1](1)
  connect dend[41](0), dend[39](1)
  connect dend[42](0), dend[38](1)
  for i = 43, 44 connect dend[i](0), dend[i-1](1)
  connect dend[45](0), dend[43](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), dend[42](1)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  for i = 51, 53 connect dend[i](0), dend[i-1](1)
  connect dend[54](0), dend[52](1)
  connect dend[55](0), dend[51](1)
  for i = 56, 57 connect dend[i](0), dend[i-1](1)
  connect dend[58](0), dend[56](1)
  connect dend[59](0), dend[55](1)
  connect dend[60](0), dend[50](1)
  connect dend[61](0), dend[37](1)
  for i = 62, 64 connect dend[i](0), dend[i-1](1)
  connect dend[65](0), dend[63](1)
  connect dend[66](0), dend[62](1)
  connect dend[67](0), dend[61](1)
  for i = 68, 69 connect dend[i](0), dend[i-1](1)
  connect dend[70](0), dend[68](1)
  connect dend[71](0), dend[67](1)
  connect dend[72](0), soma(0.5)
  for i = 73, 74 connect dend[i](0), dend[i-1](1)
  connect dend[75](0), dend[73](1)
  connect dend[76](0), dend[72](1)
  connect dend[77](0), soma(0.5)
  for i = 78, 79 connect dend[i](0), dend[77](1)
  for i = 80, 81 connect dend[i](0), dend[i-1](1)
  connect dend[82](0), dend[80](1)
  connect dend[83](0), dend[79](1)
  connect dend[84](0), soma(0.5)
  for i = 85, 86 connect dend[i](0), dend[84](1)
  for i = 87, 88 connect dend[i](0), dend[86](1)
  for i = 89, 91 connect dend[i](0), dend[88](1)
  connect dend[92](0), soma(0.5)
  for i = 93, 95 connect dend[i](0), dend[i-1](1)
  connect dend[96](0), dend[94](1)
  connect dend[97](0), dend[93](1)
  connect dend[98](0), dend[92](1)
  for i = 99, 100 connect dend[i](0), dend[98](1)
  for i = 101, 102 connect dend[i](0), dend[100](1)
  connect dend[103](0), soma(0.5)
  for i = 104, 107 connect dend[i](0), dend[i-1](1)
  connect dend[108](0), dend[106](1)
  for i = 109, 111 connect dend[i](0), dend[i-1](1)
  connect dend[112](0), dend[110](1)
  connect dend[113](0), dend[109](1)
  connect dend[114](0), dend[108](1)
  for i = 115, 116 connect dend[i](0), dend[114](1)
  connect dend[117](0), dend[105](1)
  connect dend[118](0), dend[104](1)
  for i = 119, 122 connect dend[i](0), dend[i-1](1)
  connect dend[123](0), dend[121](1)
  connect dend[124](0), dend[120](1)
  connect dend[125](0), dend[119](1)
  connect dend[126](0), dend[118](1)
  for i = 127, 128 connect dend[i](0), dend[126](1)
  connect dend[129](0), dend[103](1)
  for i = 130, 133 connect dend[i](0), dend[i-1](1)
  connect dend[134](0), dend[132](1)
  for i = 135, 136 connect dend[i](0), dend[134](1)
  for i = 137, 138 connect dend[i](0), dend[136](1)
  connect dend[139](0), dend[131](1)
  connect dend[140](0), dend[130](1)
  connect dend[141](0), dend[129](1)
  for i = 142, 143 connect dend[i](0), dend[141](1)
  for i = 144, 145 connect dend[i](0), dend[143](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
  	// pt3dconst(1) // this line is activated in the translation function
	  //# note that the soma here is unsual with 5 pts and different diam
	  // if you are not cautious, neuron may change these diameters to another unified value and mess up with the soma area
	  // this may happen with you open the soma parameters from the GUI
	pt3dadd(-518.36, 44.2714, 0, 36.9042)
	pt3dadd(-517.175, 42.5831, -5.87, 32.0881)
	pt3dadd(-516.49, 43.8719, -10.77, 17.2456)
	pt3dadd(-514.756, 41.2769, 3.23, 33.5642)
	pt3dadd(-507.193, 37.5256, 6.8856, 19.205)
  }
  dend {pt3dclear()
	pt3dstyle(1, -515.752, 42.7676, -4.81197)
	pt3dadd(-524.43, 32.08, -5.87, 7.31)
	pt3dadd(-526.35, 29.77, -5.87, 5.57)
	pt3dadd(-527.66, 27.47, -5.87, 4.52)
  }
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  }
}
proc shape3d_2() {
  dend[4] {	pt3dadd(-683.2, -71.65, -210.48, 0.35)
	pt3dadd(-684.12, -71.74, -214.4, 0.35)
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  }
}
proc shape3d_3() {
  dend[10] {	pt3dadd(-729.15, 16.14, -200.69, 0.35)
	pt3dadd(-732.1, 14.35, -200.69, 0.35)
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  }
}
proc shape3d_4() {
  dend[13] {	pt3dadd(-536.75, -5.83, -203.63, 0.35)
	pt3dadd(-538.43, -7.61, -208.53, 0.35)
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  }
}
proc shape3d_5() {
  dend[19] {	pt3dadd(-579.18, 19.39, -10.77, 1.04)
	pt3dadd(-581.03, 18.94, -10.77, 1.04)
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  }
}
proc shape3d_6() {
  dend[23] {	pt3dadd(-378.84, 2.51, 121.4, 0.7)
	pt3dadd(-377.24, 1.1, 121.4, 0.7)
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  }
}
proc shape3d_7() {
  dend[29] {	pt3dadd(-374.76, -142.94, 168.39, 0.35)
	pt3dadd(-373.36, -144.97, 168.39, 0.35)
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  }
}
proc shape3d_8() {
  dend[33] {	pt3dadd(-556.85, -105.63, 85.17, 0.35)
	pt3dadd(-558.76, -106.83, 85.17, 0.35)
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  }
}
proc shape3d_9() {
  dend[35] {	pt3dadd(-474.47, -160.8, 186.01, 0.35)
	pt3dadd(-471.7, -162.54, 185.03, 0.35)
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  }
}
proc shape3d_10() {
  dend[44] {	pt3dadd(-344.77, 255.28, 192.86, 0.35)
	pt3dadd(-345.11, 257.75, 192.86, 0.35)
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  }
}
proc shape3d_11() {
  dend[50] {	pt3dadd(-360.33, 112.84, 148.81, 0.35)
	pt3dadd(-357.59, 113, 152.72, 0.35)
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  }
}
proc shape3d_12() {
  dend[57] {	pt3dadd(-502.66, 150.23, 226.15, 0.35)
	pt3dadd(-504.74, 148.81, 226.15, 0.35)
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  }
}
proc shape3d_13() {
  dend[68] {	pt3dadd(-388.79, -80.88, 8.81, 0.7)
	pt3dadd(-386.61, -84.41, 8.81, 0.7)
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  }
}
proc shape3d_14() {
  dend[72] {	pt3dadd(-539.38, 10.48, 10.77, 2.09)
	pt3dadd(-540.78, 7.72, 10.77, 1.74)
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  }
}
proc shape3d_15() {
  dend[76] {	pt3dadd(-508.48, -178.44, 37.2, 0.7)
	pt3dadd(-506.58, -179.71, 37.2, 0.7)
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  }
}
proc shape3d_16() {
  dend[82] {	pt3dadd(-549.45, -51.08, 145.87, 0.35)
	pt3dadd(-553.57, -52.9, 151.74, 0.35)
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  }
}
proc shape3d_17() {
  dend[85] {	pt3dadd(-602.48, 50.64, 35.24, 1.04)
	pt3dadd(-602.63, 49.02, 35.24, 1.04)
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  }
}
proc shape3d_18() {
  dend[88] {	pt3dadd(-438.67, -67.88, 250.62, 0.35)
	pt3dadd(-437.28, -66.82, 250.62, 0.35)
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  }
}
proc shape3d_19() {
  dend[96] {	pt3dadd(-537.49, 292.7, 65.59, 0.35)
	pt3dadd(-536.94, 296.38, 71.47, 0.35)
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  }
}
proc shape3d_20() {
  dend[100] {	pt3dadd(-540.54, 152.11, 101.82, 0.35)
	pt3dadd(-537.38, 151.82, 103.77, 0.35)
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  }
}
proc shape3d_21() {
  dend[109] {	pt3dadd(-523.25, 272.25, -46.99, 0.7)
	pt3dadd(-522.55, 273.48, -46.99, 0.7)
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  }
}
proc shape3d_22() {
  dend[116] {  }
  dend[117] {pt3dclear()
	pt3dadd(-531.44, 177.42, -6.85, 0.7)
	pt3dadd(-534.07, 179.47, -8.81, 0.7)
	pt3dadd(-533.76, 179.3, -8.81, 0.7)
	pt3dadd(-535.94, 182.04, -8.81, 0.7)
	pt3dadd(-537.36, 185.22, -7.83, 0.7)
	pt3dadd(-539.63, 188.29, -7.83, 0.7)
	pt3dadd(-538.2, 191.76, -7.83, 0.7)
	pt3dadd(-538.8, 195.94, -7.83, 0.7)
	pt3dadd(-540.08, 198.03, -7.83, 0.7)
	pt3dadd(-539.21, 201.81, -10.77, 0.7)
	pt3dadd(-538.58, 204.44, -6.85, 0.7)
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  }
}
proc shape3d_23() {
  dend[125] {	pt3dadd(-404.29, 198.36, -39.16, 0.7)
	pt3dadd(-402.29, 200.88, -39.16, 0.7)
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  }
}
proc shape3d_24() {
  dend[133] {	pt3dadd(-513.73, 172.35, -160.55, 0.35)
	pt3dadd(-516.06, 174.13, -160.55, 0.35)
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  }
}
proc shape3d_25() {
  dend[143] {	pt3dadd(-516.06, 178.07, -91.05, 0.7)
	pt3dadd(-514.29, 179.42, -93.98, 0.7)
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  }
}
proc AxonHillock() {
	ah{ pt3dclear()
	pt3dstyle(1, -515.752, 42.7676, -4.81197)
	pt3dadd(-499.68, 31.43, 7.83, 5.92)
	pt3dadd(-498.5, 29.61, 7.83, 4.87)
	pt3dadd(-496.43, 25.88, 7.83, 3.48)
	pt3dadd(-494.37, 22.13, 7.83, 2.44)
	pt3dadd(-493.45, 19.77, 7.83, 2.09)
	pt3dadd(-491.23, 16.21, 7.83, 1.74)
	pt3dadd(-489.78, 12.79, 7.83, 1.74)
	pt3dadd(-487.93, 8.97, 4.89, 1.39)
	pt3dadd(-486.86, 5.78, 3.92, 1.39)
	pt3dadd(-485.75, 1.86, 3.92, 1.39)
	pt3dadd(-484.54, -1.87, 3.92, 1.39)
	pt3dadd(-484.09, -4.83, 3.92, 1.39)
	pt3dadd(-483.8, -6.87, 3.92, 1.39)
	pt3dadd(-482.67, -8.61, 4.89, 1.39)
	pt3dadd(-481.52, -12.74, 1.96, 1.39)
	pt3dadd(-479.64, -18.94, 5.87, 1.39)
	pt3dadd(-475.5, -29.72, 5.87, 1.39)
	pt3dadd(-472.62, -37.02, 5.87, 1.39)
	}
	iseg {
	pt3dclear()
	pt3dadd(-471.65, -44.14, 5.87, 1.39)
	pt3dadd(-470.61, -50.3, 5.87, 1.39)
	pt3dadd(-471.59, -58.41, 5.87, 1.39)
	pt3dadd(-471.47, -64.78, 6.85, 1.39)
	}
}
proc axon_shape(){
	axon {pt3dclear()
	pt3dstyle(1, -515.752, 42.7676, -4.81197)
	pt3dadd(-499.68, 31.43, 7.83, 5.92)
	pt3dadd(-498.5, 29.61, 7.83, 4.87)
	pt3dadd(-496.43, 25.88, 7.83, 3.48)
	pt3dadd(-494.37, 22.13, 7.83, 2.44)
	pt3dadd(-493.45, 19.77, 7.83, 2.09)
	pt3dadd(-491.23, 16.21, 7.83, 1.74)
	pt3dadd(-489.78, 12.79, 7.83, 1.74)
	pt3dadd(-487.93, 8.97, 4.89, 1.39)
	pt3dadd(-486.86, 5.78, 3.92, 1.39)
	pt3dadd(-485.75, 1.86, 3.92, 1.39)
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  }
}

proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  AxonHillock()
//   axon_shape()
}

objref all, somatic, basal , AHIS
proc subsets() { local i
  objref all, somatic, basal, AHIS
  all = new SectionList()
    soma all.append()
	ah all.append()
	iseg all.append()
    // axon all.append()
    for i=0, 145 dend[i] all.append()

  somatic = new SectionList()
  soma somatic.append()

//   axonal = new SectionList()
// 		axon axonal.append()

  	basal = new SectionList()
    for i=0, 145 dend[i] basal.append()

	AHIS = new SectionList()
    ah AHIS.append()
    iseg AHIS.append()
	// axon AHIS.append()

}

proc parameters() {
	celsius = 36			            // Temperature at which simulations are performed
	v_init	= -70                		// mV, resting membrane potential
}

proc geom() {
	geom_nseg()
}

external lambda_f
proc geom_nseg() {
	forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}

proc biophys() {
	RM = 833 

	forsec all {
		Ra = 70
		cm = 1.0
	}

	soma {
		insert pas 
			g_pas = 1.0/(RM)
			e_pas = -70
		
		insert NafSm
			gnabar_NafSm  = 0.06
			ena_NafSm     = 50
			amA_NafSm     = 14+17.5
			bmA_NafSm     = 38+17.5
			theta_h_NafSm = 55-17.5

		insert KdrSm
			gkdrbar_KdrSm = 0.55//0.43
			ek_KdrSm      = -80
			theta_n_KdrSm = 28-17.5
			tn_KdrSm      = 5

		insert CaSm2
			gSK3bar_CaSm2 	= 0//0.0481 				// SK3 conductance
			gSK2bar_CaSm2 	= 0.00855		 			// SK2 conductance
			gcanbar_CaSm2 	= 0.035						// Calcium conductance
			gcalbar_CaSm2 	= 0
			ek_CaSm2 		= ek_KdrSm
			
		// Calcium dynamics
			f_CaSm2 		= 0.025 		// speed 0.01
			alpha_CaSm2 	= 0.4 			// current to Cai rate 0.5
			kca_CaSm2 		= 12//0.25 		// buffering

		// SK3 dynamics ( do not touch these)
			kd3_CaSm2 		= 0.001 	 	// half [Cai]        								
			nexp3_CaSm2 	= 1.4			//2
			S3_tau_CaSm2 	= 11 			//(ms)

		// SK2 dynamics
			kd2_CaSm2 		= 0.001/2 	 // half [Cai]        								
			nexp2_CaSm2 	= 4//1.5
			S2_tau_CaSm2 	= 15.7//49.8 					//(ms)

		// N-type Calcium channel dynamics
			tmn_CaSm2 			= 5 					//(ms)
			thetamn_CaSm2  		= 22-16.5 				//(mV)
			thn_CaSm2 			= 40 					//(ms)
			thetahn_CaSm2  		= 40-16.5				//(mV)

	}

	forsec basal {
		insert pas 
			g_pas = 1.0/(RM*50)
			e_pas = -70

		insert info // to save the electronic distance
	}

	forsec AHIS {
		insert pas 
			g_pas = 1.0/(RM)
			e_pas = -70

		insert NafIs
			gnabar_NafIs  = 0.36	//0.45
			ena_NafIs     = 50
			amA_NafIs     = 10+17.5
			bmA_NafIs     = 30+17.5
			theta_h_NafIs = 55-17.5

		insert KdrIs
			gkbar_KdrIs   = 0.2 //0.355
			ek_KdrIs      = -80
			theta_n_KdrIs = 28-17.5

		insert NapIs
			gnapbar_NapIs = 4.0571e-005
			ena_NapIs     = 50
			ampB_NapIs    = 38.4-17.5
			bmpB_NapIs    = 42.7-17.5
	}

}



endtemplate Amandola_MN3