begintemplate Amandola_MN3_sliced
objref this
public init, topol, subsets, geom, biophys, geom_nseg, basic_shape


public soma, dend, ah, iseg
public all, somatic, basal, AHIS

proc init() {
	parameters()
	topol()
	subsets()
	biophys()
	geom()
	print "Sliced Cell Created"
}

create soma, dend[125], ah, iseg

proc topol() { local i
  for i = 0, 8 connect dend[i](0), soma(0.5)
  for i = 9, 10 connect dend[i](0), dend(1)
  for i = 11, 12 connect dend[i](0), dend[1](1)
  for i = 13, 14 connect dend[i](0), dend[2](1)
  for i = 15, 16 connect dend[i](0), dend[3](1)
  for i = 17, 18 connect dend[i](0), dend[4](1)
  for i = 19, 20 connect dend[i](0), dend[5](1)
  for i = 21, 22 connect dend[i](0), dend[6](1)
  for i = 23, 24 connect dend[i](0), dend[7](1)
  for i = 25, 26 connect dend[i](0), dend[8](1)
  for i = 27, 28 connect dend[i](0), dend[9](1)
  for i = 29, 30 connect dend[i](0), dend[10](1)
  for i = 31, 32 connect dend[i](0), dend[11](1)
  for i = 33, 34 connect dend[i](0), dend[12](1)
  for i = 35, 36 connect dend[i](0), dend[13](1)
  for i = 37, 38 connect dend[i](0), dend[15](1)
  for i = 39, 40 connect dend[i](0), dend[18](1)
  for i = 41, 42 connect dend[i](0), dend[19](1)
  for i = 43, 44 connect dend[i](0), dend[20](1)
  for i = 45, 46 connect dend[i](0), dend[21](1)
  for i = 47, 48 connect dend[i](0), dend[22](1)
  for i = 49, 50 connect dend[i](0), dend[25](1)
  for i = 51, 52 connect dend[i](0), dend[26](1)
  for i = 53, 54 connect dend[i](0), dend[27](1)
  for i = 55, 56 connect dend[i](0), dend[28](1)
  for i = 57, 58 connect dend[i](0), dend[29](1)
  for i = 59, 60 connect dend[i](0), dend[30](1)
  for i = 61, 62 connect dend[i](0), dend[31](1)
  for i = 63, 64 connect dend[i](0), dend[34](1)
  for i = 65, 66 connect dend[i](0), dend[38](1)
  for i = 67, 68 connect dend[i](0), dend[41](1)
  for i = 69, 70 connect dend[i](0), dend[42](1)
  for i = 71, 72 connect dend[i](0), dend[43](1)
  for i = 73, 74 connect dend[i](0), dend[44](1)
  for i = 75, 76 connect dend[i](0), dend[45](1)
  for i = 77, 78 connect dend[i](0), dend[48](1)
  for i = 79, 80 connect dend[i](0), dend[49](1)
  for i = 81, 82 connect dend[i](0), dend[52](1)
  for i = 83, 84 connect dend[i](0), dend[53](1)
  for i = 85, 86 connect dend[i](0), dend[56](1)
  for i = 87, 88 connect dend[i](0), dend[57](1)
  for i = 89, 90 connect dend[i](0), dend[58](1)
  for i = 91, 92 connect dend[i](0), dend[60](1)
  for i = 93, 94 connect dend[i](0), dend[68](1)
  for i = 95, 96 connect dend[i](0), dend[70](1)
  for i = 97, 98 connect dend[i](0), dend[71](1)
  for i = 99, 100 connect dend[i](0), dend[72](1)
  for i = 101, 102 connect dend[i](0), dend[78](1)
  for i = 103, 104 connect dend[i](0), dend[82](1)
  for i = 105, 106 connect dend[i](0), dend[86](1)
  for i = 107, 108 connect dend[i](0), dend[90](1)
  for i = 109, 110 connect dend[i](0), dend[91](1)
  for i = 111, 112 connect dend[i](0), dend[101](1)
  for i = 113, 114 connect dend[i](0), dend[105](1)
  for i = 115, 116 connect dend[i](0), dend[108](1)
  for i = 117, 118 connect dend[i](0), dend[109](1)
  for i = 119, 120 connect dend[i](0), dend[110](1)
  for i = 121, 122 connect dend[i](0), dend[113](1)
  for i = 123, 124 connect dend[i](0), dend[120](1)
  connect ah(0), soma(0.5)
  connect iseg(0), ah(1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-3.5652, 2.36562, 1.30488, 36.9042)
	pt3dadd(-2.3802, 0.677319, -4.56512, 32.0881)
	pt3dadd(-1.6952, 1.96612, -9.46512, 17.2456)
	pt3dadd(0.0388062, -0.628879, 4.53488, 33.5642)
	pt3dadd(7.60179, -4.38018, 8.19048, 19.205)
  }
  dend {pt3dclear()
	pt3dstyle(1, 2.0183, -1.00728, 4.74768)
	pt3dadd(-2.17969, 19.3751, 10.5396, 9.05)
	pt3dadd(-1.96967, 22.5051, 10.5396, 7.31)
	pt3dadd(-1.60968, 26.1651, 11.5197, 5.92)
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  }
}
proc shape3d_2() {
  dend[10] {	pt3dadd(2.64032, 58.2551, 12.4997, 3.83)
	pt3dadd(3.77032, 60.9451, 12.4997, 3.83)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(-72.7397, 27.2151, 101.59, 0.7)
	pt3dadd(-72.9197, 32.0751, 101.59, 0.7)
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  }
}
proc shape3d_4() {
  dend[18] {  }
  dend[19] {pt3dclear()
	pt3dadd(43.7103, -20.4749, 14.4496, 3.83)
	pt3dadd(45.2103, -22.0149, 13.4797, 3.83)
	pt3dadd(47.6003, -24.7749, 15.4297, 3.13)
	pt3dadd(51.3803, -26.0949, 17.3897, 2.78)
	pt3dadd(55.3603, -28.1949, 21.3097, 2.78)
	pt3dadd(58.9903, -30.1649, 27.1797, 2.78)
	pt3dadd(61.4303, -31.5649, 27.1797, 2.44)
	pt3dadd(64.1503, -32.5349, 27.1797, 2.44)
	pt3dadd(67.6003, -34.2449, 27.1797, 2.44)
	pt3dadd(70.0403, -34.9349, 28.1597, 2.44)
	pt3dadd(72.8603, -36.0849, 27.1797, 2.44)
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  }
}
proc shape3d_5() {
  dend[24] {	pt3dadd(-65.4797, -20.4449, 5.63965, 0.7)
	pt3dadd(-66.8797, -21.2749, 5.63965, 0.7)
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  }
}
proc shape3d_6() {
  dend[31] {	pt3dadd(-31.7397, 128.355, 98.6496, 0.7)
	pt3dadd(-31.0497, 125.585, 99.6297, 0.7)
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  }
}
proc shape3d_7() {
  dend[37] {	pt3dadd(-50.6297, -7.94488, 75.1496, 1.04)
	pt3dadd(-51.7597, -7.25488, 75.1496, 1.04)
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  }
}
proc shape3d_8() {
  dend[41] {	pt3dadd(114.2, -100.115, 23.2696, 1.39)
	pt3dadd(115.18, -103.795, 24.2397, 1.39)
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  }
}
proc shape3d_9() {
  dend[46] {	pt3dadd(-64.4697, -135.305, 133.89, 0.35)
	pt3dadd(-66.0397, -133.675, 133.89, 0.35)
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  }
}
proc shape3d_10() {
  dend[49] {	pt3dadd(-125.4, -40.2549, -68.7603, 0.35)
	pt3dadd(-127.88, -39.2749, -69.7404, 0.35)
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  }
}
proc shape3d_11() {
  dend[54] {	pt3dadd(-11.1197, 137.235, -88.3404, 0.35)
	pt3dadd(-13.5197, 137.615, -92.2604, 0.35)
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  }
}
proc shape3d_12() {
  dend[59] {	pt3dadd(-32.6797, 232.285, 62.4296, 0.35)
	pt3dadd(-32.5097, 232.875, 57.5297, 0.35)
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  }
}
proc shape3d_13() {
  dend[64] {	pt3dadd(12.9603, 271.845, 127.04, 0.35)
	pt3dadd(14.3203, 269.215, 133.89, 0.35)
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  }
}
proc shape3d_14() {
  dend[67] {	pt3dadd(190.56, -195.685, 20.3297, 0.7)
	pt3dadd(192.26, -197.875, 20.3297, 0.7)
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  }
}
proc shape3d_15() {
  dend[74] {	pt3dadd(130.22, 184.905, 34.0296, 0.35)
	pt3dadd(129.51, 186.885, 34.0296, 0.35)
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  }
}
proc shape3d_16() {
  dend[78] {	pt3dadd(151.81, -41.4049, 133.89, 0.7)
	pt3dadd(154.95, -41.6649, 133.89, 0.7)
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  }
}
proc shape3d_17() {
  dend[84] {	pt3dadd(-9.41968, 140.395, -82.4704, 0.35)
	pt3dadd(-11.0097, 142.595, -82.4704, 0.35)
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  }
}
proc shape3d_18() {
  dend[92] {	pt3dadd(6.88031, 290.035, -7.08035, 0.35)
	pt3dadd(7.42032, 293.295, -6.10035, 0.35)
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  }
}
proc shape3d_19() {
  dend[99] {	pt3dadd(92.0177, 72.6752, 175, 0.35)
	pt3dadd(92.0177, 72.6752, 175, 0.35)
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  }
}
proc shape3d_20() {
  dend[102] {	pt3dadd(198.789, -33.6151, 175, 0.35)
	pt3dadd(198.789, -33.6151, 175, 0.35)
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  }
}
proc shape3d_21() {
  dend[107] {	pt3dadd(190.42, 205.785, -50.1604, 0.35)
	pt3dadd(194.82, 210.595, -50.1604, 0.35)
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  }
}
proc shape3d_22() {
  dend[119] {	pt3dadd(-5.78967, 253.975, -39.3904, 0.7)
	pt3dadd(-6.07965, 258.005, -42.3303, 0.7)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
}

objref all, somatic, basal , AHIS
proc subsets() { local i
  objref all, somatic, basal, AHIS
  all = new SectionList()
    soma all.append()
    for i=0, 124 dend[i] all.append()
    ah all.append()
    iseg all.append()

	somatic = new SectionList()
  	soma somatic.append()

//   axonal = new SectionList()
// 		axon axonal.append()

  	basal = new SectionList()
    for i=0, 124 dend[i] basal.append()

	AHIS = new SectionList()
    ah AHIS.append()
    iseg AHIS.append()

}

proc parameters() {
	celsius = 36			            // Temperature at which simulations are performed
	v_init	= -70                		// mV, resting membrane potential
}

proc geom() {
	geom_nseg()
}

external lambda_f
proc geom_nseg() {
	forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}


proc biophys() {
	RM = 833 

	forsec all {
		Ra = 70
		cm = 1.0
	}

	soma {
		insert pas 
			g_pas = 1.0/(RM)
			e_pas = -70
		
		insert NafSm
			gnabar_NafSm  = 0.06
			ena_NafSm     = 50
			amA_NafSm     = 14+17.5
			bmA_NafSm     = 38+17.5
			theta_h_NafSm = 55-17.5

		insert KdrSm
			gkdrbar_KdrSm = 0.55//0.43
			ek_KdrSm      = -80
			theta_n_KdrSm = 28-17.5
			tn_KdrSm      = 5

		insert CaSm2
			gSK3bar_CaSm2 	= 0//0.0481 				// SK3 conductance
			gSK2bar_CaSm2 	= 0.00855		 			// SK2 conductance
			gcanbar_CaSm2 	= 0.035						// Calcium conductance
			gcalbar_CaSm2 	= 0
			ek_CaSm2 		= ek_KdrSm
			
		// Calcium dynamics
			f_CaSm2 		= 0.025 		// speed 0.01
			alpha_CaSm2 	= 0.4 			// current to Cai rate 0.5
			kca_CaSm2 		= 12//0.25 		// buffering

		// SK3 dynamics ( do not touch these)
			kd3_CaSm2 		= 0.001 	 	// half [Cai]        								
			nexp3_CaSm2 	= 1.4			//2
			S3_tau_CaSm2 	= 11 			//(ms)

		// SK2 dynamics
			kd2_CaSm2 		= 0.001/2 	 // half [Cai]        								
			nexp2_CaSm2 	= 4//1.5
			S2_tau_CaSm2 	= 15.7//49.8 					//(ms)

		// N-type Calcium channel dynamics
			tmn_CaSm2 			= 5 					//(ms)
			thetamn_CaSm2  		= 22-16.5 				//(mV)
			thn_CaSm2 			= 40 					//(ms)
			thetahn_CaSm2  		= 40-16.5				//(mV)

	}

	forsec basal {
		insert pas 
			g_pas = 1.0/(RM*50)
			e_pas = -70

		insert info // to save the electronic distance
	}

	forsec AHIS {
		insert pas 
			g_pas = 1.0/(RM)
			e_pas = -70

		insert NafIs
			gnabar_NafIs  = 0.36	//0.45
			ena_NafIs     = 50
			amA_NafIs     = 10+17.5
			bmA_NafIs     = 30+17.5
			theta_h_NafIs = 55-17.5

		insert KdrIs
			gkbar_KdrIs   = 0.2 //0.355
			ek_KdrIs      = -80
			theta_n_KdrIs = 28-17.5

		insert NapIs
			gnapbar_NapIs = 4.0571e-005
			ena_NapIs     = 50
			ampB_NapIs    = 38.4-17.5
			bmpB_NapIs    = 42.7-17.5
	}

}


endtemplate Amandola_MN3_sliced
